# Generated by Configurator on Wed Sep 16 10:45:35 PDT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM10,SerialManager,COM10
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,IntensiLightShutter,Nikon,IntensiLightShutter

# Pre-init settings for devices
Property,IntensiLightShutter,Port,COM10

# Pre-init settings for COM ports
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,9600
Property,COM10,DTR,Disable
Property,COM10,DataBits,8
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Fast USB to Serial,Disable
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,IntensiLightShutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Fluor 4x NA 0.13 Dry
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Unknown
Label,TINosePiece,2,3-(Achromat) 60x NA 0.80 Dry
Label,TINosePiece,1,2-S Plan Fluor 40x NA 0.60 Dry
Label,TINosePiece,0,1-Plan Fluor 20x NA 0.50 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6------
Label,TIFilterBlock1,4,5------
Label,TIFilterBlock1,3,4------
Label,TIFilterBlock1,2,3-DsRED
Label,TIFilterBlock1,1,2-GFPHQ
Label,TIFilterBlock1,0,1-MIRR
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: adjusted
# Preset: fast
ConfigGroup,adjusted,fast,HamamatsuHam_DCAM,SENSOR MODE,AREA
ConfigGroup,adjusted,fast,HamamatsuHam_DCAM,ScanMode,2


# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

