PriorXY.cfg# Generated by Configurator on Mon Mar 04 13:50:38 EST 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,XYStage,Prior,XYStage

# Pre-init settings for devices
Property,XYStage,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

